CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage)

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:5
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Concentration>.*)_[0-9]
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*[\\/](?P<LPS>.{9})
    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:_(?P<Experiment_Number>[0-9])
    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:_(?P<Well>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "ch00")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch01")
    Name to assign these images:FM
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch02")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Concentration

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DAPI
    Name the primary objects to be identified:DAPI
    Typical diameter of objects, in pixel units (Min,Max):30,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Minimum Cross-Entropy

GaussianFilter:[module_num:6|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
    Select the input image:FM
    Name the output image:GaussianFilter
    Sigma:1

IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:DAPI
    Name the objects to be identified:FM
    Select the method to identify the secondary objects:Propagation
    Select the input image:FM
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifyTertiaryObjects:[module_num:8|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
    Select the larger identified objects:FM
    Select the smaller identified objects:DAPI
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

ExpandOrShrinkObjects:[module_num:9|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
    Select the input objects:FM
    Name the output objects:expandedFM
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:2
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
IdentifyTertiaryObjects:[module_num:10|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
    Select the larger identified objects:expandedFM
    Select the smaller identified objects:FM
    Name the tertiary objects to be identified:Membrane
    Shrink smaller object prior to subtraction?:Yes

ImageMath:[module_num:11|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enabled:False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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:-0.015
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:GFP_aftermath
    Image or measurement?:Image
    Select the first image:GFP
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:DAPI
    Multiply the second image by:0
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
RescaleIntensity:[module_num:12|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
    Select the input image:GFP
    Name the output image:GFP_aftermath
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.1,1.0
    Intensity range for the output image:0.0,1.0
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
MeasureObjectIntensity:[module_num:13|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
    Select images to measure:GFP, GFP_aftermath
    Select objects to measure:Cytoplasm, Membrane

ExportToSpreadsheet:[module_num:14|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|/Volumes/DG_Backup_E/SAPNAS/2021-09-29_BV2+041GFP_and_FV3/BV2+041GFP/data_output/final
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Membrane|Intensity_IntegratedIntensity_GFP,Membrane|Intensity_IntegratedIntensity_GFP_aftermath,Membrane|Intensity_MeanIntensity_GFP,Membrane|Intensity_MeanIntensity_GFP_aftermath,Cytoplasm|Intensity_IntegratedIntensity_GFP,Cytoplasm|Intensity_IntegratedIntensity_GFP_aftermath,Cytoplasm|Intensity_MedianIntensity_GFP,Cytoplasm|Intensity_MedianIntensity_GFP_aftermath,Cytoplasm|Intensity_MeanIntensity_GFP,Cytoplasm|Intensity_MeanIntensity_GFP_aftermath
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:BV2_FV3_GFP_FINAL
    Overwrite existing files without warning?:No
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